PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = blue
  expName = Builder Asg- w loop
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Routines
  Routine Trial
    KeyboardComponent key_resp
      allowedKeys = 'a','b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r','s','t','u','v','w','x','y','z','space','backspace', 'return'
      correctAns = $screen_text
      forceEndRoutine = False
      store = all keys
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    TextComponent text_feedback
      letterHeight = 0.07
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $screen_text
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        screen_text = ''
      Each Frame:
        if("backspace" in key_resp.keys):
            key_resp.keys.remove("backspace")
            if(len(key_resp.keys) > 0):
                key_resp.keys.pop()
        elif("space" in key_resp.keys):
            key_resp.keys.remove("space")
            key_resp.keys.append(' ')
        elif("return" in key_resp.keys):
            key_resp.keys.remove("return")

            screen_text = ''.join(key_resp.keys)
            thisExp.addData("recall_resp", screen_text) #add new variable to data file being produced

            continueRoutine = False

        screen_text = ''.join(key_resp.keys)
    TextComponent text_phrase
      letterHeight = 0.07
      pos = (0, 0.25)
      text [set every repeat] = $Phrase
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    TextComponent Prompt
      color = grey
      letterHeight = 0.05
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = Re-type this phrase below:
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  Routine Blank500
  Routine Thank_you
    TextComponent TY_message
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your participation!
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Flow
  LoopInitiator phrase loopType="TrialHandler"
    conditionsFile = phrase_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('text_phrase', 'the cow jumped over the moon')]),
      OrderedDict([('text_phrase', 'there will be desserts at the party')]),
      OrderedDict([('text_phrase', 'the little boy loved his toys')])]
    Routine Trial
  LoopTerminator phrase
  Routine Thank_you
